PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant': '', 'condition': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = df_e1
  logging level = debug
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Routines
  Routine consent
  Routine instructions
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent ins
      color = black
      contrast = 1.5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        We are interested to see how you experience art.

        We have put together an assortment of art for you to view at your own pace.

        After you’ve seen all of the artwork, you will be tested to see how well you remember it.
    TextComponent con1
      color = black
      letterHeight = 0.1
      pos = (0, -0.7)
      startVal [time (s)] = 2
      text = Press the spacebar to continue.
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['condition'] == '1':
            grp = 'cv'
            thisExp.addData('condition', grp)
        else:
            grp = 'vv'
            thisExp.addData('condition', grp)

        import copy

        all_rows = list(range(32))
        shuffle(all_rows)
  Routine b1_ins
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will be viewing an assortment of artwork. For each piece of art, please take a photo.

        Press the spacebar when you are ready to move on to the next piece.


        Press the spacebar to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine b1
    ImageComponent image
      image [set every repeat] = $photo
      size = (1, 1.6)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine b2_ins
    TextComponent text_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will be viewing an assortment of artwork.

        Press the spacebar when you are ready to move on to the next piece.


        Press the spacebar to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine b2
    ImageComponent image_2
      image [set every repeat] = $photo
      size = (1, 1.6)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine dist
    KeyboardComponent key_resp_8
      allowedKeys = 'enter','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $distractQ
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text = Press enter to continue to the next problem.
      wrapWidth = 1.5
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if trials_3.thisTrialN == 0:
            startTime = globalClock.getTime()
      Each Frame:
        if globalClock.getTime() - startTime >= 30:
            trials_3.finished = True
            continueRoutine = False
  Routine test
    TextboxComponent textbox
      anchor = top-center
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      color = black
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.8)
      size = (0.25, 0.1)
      startVal [time (s)] = 0.1
      text = I'm Done
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    KeyboardComponent input
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = black
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Type your answers below. 
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  Routine debrief
  Routine test_ins
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will now be tested on the artwork that you saw earlier.

        On the next screen, you will be asked to type all of the things that you remember seeing in the artwork shown to you earlier.

        Press the spacebar to continue to the test.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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Flow
  Routine consent
  Routine instructions
  Routine b1_ins
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $all_rows[:16]
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'concept': 'leaves', 'photo': 'leaves1.jpg', 'ins': 'You will be viewing an assortment of artwork. For each piece of art, please take a photo. Press the spacebar when you are ready to move on to the next piece.'},
      {'concept': 'bird', 'photo': 'bird3.jpg', 'ins': 'You will be viewing an assortment of artwork. Press the spacebar when you are ready to move on to the next piece.'},
      {'concept': 'cat', 'photo': 'cat1.jpg', 'ins': None},
      {'concept': 'bike', 'photo': 'bike3.jpg', 'ins': None},
      {'concept': 'bear', 'photo': 'bear1.jpg', 'ins': None},
      {'concept': 'apples', 'photo': 'apples4.jpg', 'ins': None},
      {'concept': 'lion', 'photo': 'lion1.jpg', 'ins': None},
      {'concept': 'elephant', 'photo': 'elephant3.jpg', 'ins': None},
      {'concept': 'train', 'photo': 'train1.jpg', 'ins': None},
      {'concept': 'banana', 'photo': 'banana1.jpg', 'ins': None},
      {'concept': 'strawberries', 'photo': 'strawberries4.jpg', 'ins': None},
      {'concept': 'tree', 'photo': 'tree1.jpg', 'ins': None},
      {'concept': 'fish', 'photo': 'fish3.jpg', 'ins': None},
      {'concept': 'turtle', 'photo': 'turtle3.jpg', 'ins': None},
      {'concept': 'horse', 'photo': 'horse2.jpg', 'ins': None},
      {'concept': 'bench', 'photo': 'bench1.jpg', 'ins': None},
      {'concept': 'book', 'photo': 'book1.jpg', 'ins': None},
      {'concept': 'bridge', 'photo': 'bridge1.jpg', 'ins': None},
      {'concept': 'car', 'photo': 'car1.jpg', 'ins': None},
      {'concept': 'fox', 'photo': 'fox1.jpg', 'ins': None},
      {'concept': 'frog', 'photo': 'frog1.jpg', 'ins': None}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
    Routine b1
  LoopTerminator trials
  Routine b2_ins
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = $all_rows[16:]
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    Routine b2
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    Routine dist
  LoopTerminator trials_3
  Routine test_ins
  Routine test
  Routine debrief
